

// Specifiy global variables; Process files only in 488 channel

input = getDirectory("Input directory");
output = getDirectory("Output directory");
Dialog.create("File Type");
Dialog.addString("File suffix: ", "488 laser.TIF");
suffix = Dialog.getString();

setBatchMode(false);
// setBatchMode to be false to show active images for selection


processFolder (input);
// run processFolder function

// def the function to scan through the input folder and call the process function.
function processFolder(input){
	list = getFileList(input);
	for (i = 0; i < list.length; i++) {
		if (File.isDirectory(input + list[i]))
			processFolder("" + input + list[i]); // needs to use slice >1 to filter out thumbs
		if (endsWith(list[i], suffix))
			processFile(input, output, list[i]);	
	}
}



// def the function to process the folder.
function processFile(input, output, file) {
        	open (input + file);
        	outName = File.getName (file) + " Cropped";
        	waitForUser("Select a Rectangle region in the best focal plan to crop a cell of interest and next Press OK");
        	run("Crop");
        	saveAs("jpeg", output + outName);
        	close();
}


