//shiwei; script to get cell info with manual cropping

//get ims directory
dir=getDirectory("User Choose Cell Info Image Folder");
file_list = getFileList(dir);

//initiate im index for roiManager
f_ind=0;

//select area of interest and measure
//set desired measurement options first
for(f=0;f<file_list.length;f++){
	file=dir+file_list[f];
	if (endsWith(file, ".TIF")){
	    f_ind=f_ind+1;
	    open(file);
	    name = getTitle();
	    selectWindow(name);
	    waitForUser ("Draw rectangle to select cell of interest and Press OK after your selection."); 
	    roiManager("Add");
	    selectWindow ("ROI Manager");
	    roiManager("Select", f_ind-1);
	    roiManager("Measure");
	    selectWindow(name);
	    close();	
	}
}

//save results and close windows
selectWindow ("ROI Manager");
run("Close");
savename = dir+"cell_info_raw.csv";
saveAs("Results",savename);
selectWindow ("Results");
run("Close");










